CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['This module will prepare ilastik stacks for the ilastik cell classification pipeline.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['No metadata.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<filename>.*)_(ilastik|nuclear|full|membrane).tiff
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    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Default Input Folder|
    Match file and image metadata:[{'CSV Metadata': 'cropname', 'Image Metadata': 'filename'}]
    Use case insensitive matching?:No
    Metadata file name:training_image_meta.csv
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
NamesAndTypes:[module_num:3|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notes:['Here only _ilastik.tiff files are selected.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "_ilastik.tiff") (metadata does use "1")
    Name to assign these images:Ilastik
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "_nuclear.tiff") (metadata does use "1")
    Name to assign these images:Nuclear
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "_full.tiff") (metadata does use "1")
    Name to assign these images:Full
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "_membrane.tiff") (metadata does use "1")
    Name to assign these images:Membrane
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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notes:['No groups.']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
    Do you want to group your images?:No
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
SmoothMultichannel:[module_num:5|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notes:['This filter will remove strong, single outlier pixels from the images, which sometimes occur in IMC images.']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
    Select the input image:Ilastik
    Name the output image:IlastikFil
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

SmoothMultichannel:[module_num:6|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
    Select the input image:Nuclear
    Name the output image:NuclearFil
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

SmoothMultichannel:[module_num:7|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
    Select the input image:Full
    Name the output image:FullFil
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

SmoothMultichannel:[module_num:8|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
    Select the input image:Membrane
    Name the output image:MembraneFil
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

SummarizeStack:[module_num:9|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
    Select the input image:IlastikFil
    Conversion method:Python Function
    Name the output image:ScaledMean
    Input a Python function:lambda x, axis: np.mean(x, axis=axis)*10

StackImages:[module_num:10|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
    Name the output image:IlastikExp
    Hidden:2
    Image name:ScaledMean
    Image name:IlastikFil

Resize:[module_num:11|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notes:['Scaling up the images 2x makes pixel classificaiton easier.']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
    Select the input image:IlastikExp
    Name the output image:Ilastik2x
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:2
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:12|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
    Select the input image:NuclearFil
    Name the output image:Nuclear2x
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:2
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:13|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
    Select the input image:MembraneFil
    Name the output image:Membrane2x
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:2
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:14|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
    Select the input image:FullFil
    Name the output image:Full2x
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:2
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    Interpolation method:Bilinear
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    Additional image count:0

CropImage:[module_num:15|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notes:['This function crops random sections from the images, that are used for training.']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
    Select the input image:Ilastik2x
    Name the output image:Ilastikcropped
    W width:\g<w>
    H height:\g<h>
    Crop random or specified section?:Crop specific image section
    X of upper left corner:\g<x>
    Y of upper left corner:\g<y>
    Optional Random Seed:\g<filename>
    Additional image count:3
    Select the additional image?:Nuclear2x
    Name the output image:Nuclearcropped
    Select the additional image?:Full2x
    Name the output image:Fullcropped
    Select the additional image?:Membrane2x
    Name the output image:Membranecropped

SaveImages:[module_num:16|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Ilastik2x
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ilastik
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_s2
    Saved file format:h5
    Output file location:Default Output Folder sub-folder|scaled
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:Ilastikcropped
    Select method for constructing file names:Single name
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    Enter single file name:\g<basename>_x\g<Crop_Ilastikcropped_x>_y\g<Crop_Ilastikcropped_y>_w\g<Crop_Ilastikcropped_w>_h\g<Crop_Ilastikcropped_h>
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    Saved file format:h5
    Output file location:Default Output Folder sub-folder|ilastik_h5
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:Ilastikcropped
    Select method for constructing file names:Single name
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    Enter single file name:\g<basename>_x\g<Crop_Ilastikcropped_x>_y\g<Crop_Ilastikcropped_y>_w\g<Crop_Ilastikcropped_w>_h\g<Crop_Ilastikcropped_h>_ilastik
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|ilastik_tiff
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:Nuclearcropped
    Select method for constructing file names:Single name
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    Enter single file name:\g<basename>_x\g<Crop_Ilastikcropped_x>_y\g<Crop_Ilastikcropped_y>_w\g<Crop_Ilastikcropped_w>_h\g<Crop_Ilastikcropped_h>_nuclear
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|nuclear_tiff
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Fullcropped
    Select method for constructing file names:Single name
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    Enter single file name:\g<basename>_x\g<Crop_Ilastikcropped_x>_y\g<Crop_Ilastikcropped_y>_w\g<Crop_Ilastikcropped_w>_h\g<Crop_Ilastikcropped_h>_full
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|full_tiff
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:Membranecropped
    Select method for constructing file names:Single name
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    Enter single file name:\g<basename>_x\g<Crop_Ilastikcropped_x>_y\g<Crop_Ilastikcropped_y>_w\g<Crop_Ilastikcropped_w>_h\g<Crop_Ilastikcropped_h>_membrane
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|membrane_tiff
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:22|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/vitoz
    Cluster root path:/home/vitoz
